CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.") (file doesnot startwith "003001-")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Row>[0-9]{3})(?P<Column>[0-9]{3})-(?P<Field>[0-9].*)-(?P<Time>[0-9]{3})001(?P<Channel>[0-9]+).*$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:2
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "001")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "002")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/heng/Downloads/CellProfiler%20Example%20for%20Live%20Imaging/IllumCorr/IllumHoechst.npy   
    Name to assign this image:IllumHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/heng/Downloads/CellProfiler%20Example%20for%20Live%20Imaging/IllumCorr/IllumYFP.npy   
    Name to assign this image:IllumYFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:Field

CorrectIlluminationApply:[module_num:5|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
    Select the input image:Hoechst
    Name the output image:CorrHoechst
    Select the illumination function:IllumHoechst
    Select how the illumination function is applied:Divide
    Select the input image:YFP
    Name the output image:CorrYFP
    Select the illumination function:IllumYFP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Threshold:[module_num:6|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
    Select the input image:CorrHoechst
    Name the output image:ThresNuc
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

DilateImage:[module_num:7|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
    Select the input image:ThresNuc
    Name the output image:DilateNuc
    Structuring element:disk,50

MaskImage:[module_num:8|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
    Select the input image:CorrHoechst
    Name the output image:MaskHoechst
    Use objects or an image as a mask?:Image
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    Select image for mask:DilateNuc
    Invert the mask?:Yes

MaskImage:[module_num:9|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
    Select the input image:CorrYFP
    Name the output image:MaskYFP
    Use objects or an image as a mask?:Image
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    Select image for mask:DilateNuc
    Invert the mask?:Yes

MeasureImageIntensity:[module_num:10|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
    Select images to measure:MaskHoechst, MaskYFP
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:11|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CorrSubHoechst
    Image or measurement?:Image
    Select the first image:CorrHoechst
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_MaskHoechst

ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CorrSubYFP
    Image or measurement?:Image
    Select the first image:CorrYFP
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_MaskYFP

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:CorrSubHoechst
    Name the primary objects to be identified:PrimaryNuclei
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:PrimaryNuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CorrSubYFP
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:CorrSubHoechst, CorrSubYFP
    Select objects to measure:Cell, Cytoplasm, Nuclei

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ImageMath:[module_num:18|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:LogHoechst
    Image or measurement?:Image
    Select the first image:CorrSubHoechst
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:19|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:LogYFP
    Image or measurement?:Image
    Select the first image:CorrSubYFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:20|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
    Select the input image:LogHoechst
    Name the output image:RescaleHoechst
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:21|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
    Select the input image:LogYFP
    Name the output image:RescaleYFP
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleHoechst
    Name the output image:OverlayHoechst
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:Nuclei
    Select outline color:red
    Select objects to display:Cell

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleYFP
    Name the output image:OverlayYFP
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:Nuclei
    Select outline color:red
    Select objects to display:Cell

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:OverlayHoechst
    Select method for constructing file names:Single name
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    Enter single file name:\g<Row>\g<Column>-\g<Field>-\g<Time>001001
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:OverlayYFP
    Select method for constructing file names:Single name
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    Enter single file name:\g<Row>\g<Column>-\g<Field>-\g<Time>001002
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Sheets
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cell|Intensity_IntegratedIntensity_CorrSubHoechst,Cell|Intensity_IntegratedIntensity_CorrSubYFP,Cell|Intensity_StdIntensity_CorrSubHoechst,Cell|Intensity_StdIntensity_CorrSubYFP,Cell|Intensity_LowerQuartileIntensity_CorrSubHoechst,Cell|Intensity_LowerQuartileIntensity_CorrSubYFP,Cell|Intensity_IntegratedIntensityEdge_CorrSubHoechst,Cell|Intensity_IntegratedIntensityEdge_CorrSubYFP,Cell|Intensity_MADIntensity_CorrSubHoechst,Cell|Intensity_MADIntensity_CorrSubYFP,Cell|Intensity_MassDisplacement_CorrSubYFP,Cell|Intensity_MassDisplacement_CorrSubHoechst,Cell|Intensity_MeanIntensity_CorrSubYFP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:27|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/sisplockers/ara_060321/ara_06032021_nd2_stitch_tif_renamed_resized/welld05
    Cluster root path:/sisplockers/ara_060321/ara_06032021_nd2_stitch_tif_renamed_resized/welld05
